CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>[A-P])_(?P<ImageID>[A-P][0-9]).tiff
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):15,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:Nucleus
    Name the output image:CellImage
    Select the color format:Binary (black & white)
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